PsychoPy2experiment version="3.0.6"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'],expName, expInfo['date'])
  Experiment info = {'participant': '', 'Group': 'A', 'session': '1'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  expName = PM
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Routines
  Routine feedback
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        feedback=0
        #msg=0
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if key_resp_6.keys in ['', [], None]:  # No response was made
                key_resp_6.keys=None
                key_resp_6.corr = 0
                feedback='incorrect'
                feedbcol='red'
                trials_2.addData('key_resp_6.keys',key_resp_6.keys)
                trials_2.addData('key_resp_6.corr', key_resp_6.corr)
        if key_resp_6.keys != None:
            if (str(key_resp_6.keys)[2] == str(corrAnsw)) or (str(key_resp_6.keys)[2] == corrAnsw):
                        key_resp_6.corr = 1
                        feedback='correct'
                        feedbcol='green'
            else:
                            key_resp_6.corr = 0
                            feedback='incorrect'
                            feedbcol='red'



        # check responses
        # check responses

                    # store data for trials_2 (TrialHandler)
            trials_2.addData('key_resp_6.keys',key_resp_6.keys)
            trials_2.addData('key_resp_6.corr', key_resp_6.corr)
            trials_2.addData('key_resp_6.rt', key_resp_6.rt)
            trials_2.addData('key_resp_6.rtFirst', key_resp_6.rt[0])


        nCorr = trials_2.data['key_resp_6.corr'].sum() #.std(), .mean() also available5
        #meanRt = trials_2.data['key_resp_6.rt'].mean()
        perCorr=round((trials_2.data['key_resp_6.corr'].sum()/len(trials_2.trialList))*100)
        #msg = "You got %d trials correct" %nCorr
        msg= "You got %d %% correct. \n\nPlease approach the experimenter \n\nPress 'y' to do the task again and 'n' to continue with the experiment" %perCorr
    TextComponent text_4
      color [set every repeat] = $feedbcol
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
      wrapWidth = 2
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  Routine practice_score
    TextComponent text_5
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $msg
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'y','n','l','d'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Py
      End Routine:
        if ((key_resp_4.keys) =='n'):
         repeat_practice.finished = True
  Routine recog_task2
    TextComponent text_31
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_22
      allowedKeys = 'l','d'
      correctAns = $corrAnsw
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions_3
    TextComponent text_2
      color = White
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Now you will start a small practice task.

        Remember to press the "yes" button if the word you are seeing is the same as the one before last, press "no" if it is differet.

        Please press the "Space Bar" to start.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_instructions
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will later be asked to work on the same image matching task as you did before.

        Therefore, you will have to press the {D} button for YES when the image you are seeing is the same image that you have seen two trials earlier.
        If this is not the case, press the {L} button.


        Please press {SPACE} to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thank_you
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
      wrapWidth = 1.5
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  Routine end_first_half
    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = 1.5
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      text:
        Thank you!

        Please approach the experimenter to continue.
  Routine PM_task
    ImageComponent image_5
      image [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_PM
      allowedKeys = 'l','d','h'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = all keys
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        key_resp_PM.lenient = []
        key_resp_PM.RTfirst = []
      End Routine:
        if key_resp_PM.keys in ['', [], None]:  # No response was made
             if str(CORRanswer)=='h':
                key_resp_PM.lenient = 0
                key_resp_PM.keys=None
                PM_task_loop.addData('key_resp_PM.lenient', key_resp_PM.lenient)
                PM_task_loop.addData('key_resp_PM.keys',key_resp_PM.keys)
             if str(CORRanswer)!='h':
                key_resp_PM.keys=None
                key_resp_PM.corr = 0
                PM_task_loop.addData('key_resp_PM.keys',key_resp_PM.keys)
                PM_task_loop.addData('key_resp_PM.corr', key_resp_PM.corr)

        if key_resp_PM.keys != None:  # we had a response
                PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
                if (str(key_resp_PM.keys)[2] == str(CORRanswer)) or (str(key_resp_PM.keys)[2] == CORRanswer):
                        key_resp_PM.corr = 1

                else:
                        key_resp_PM.corr = 0
               # PM_task_loop.addData('key_resp_PM.corr', key_resp_PM.corr)
               # PM_task_loop.addData('key_resp_PM.rt', key_resp_PM.rt)
               # PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
                #PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
        #

                if str(CORRanswer)=='h' and ('h' in key_resp_PM.keys):
                        key_resp_PM.lenient = 1
                elif str(CORRanswer)=='h' and ('h' not in key_resp_PM.keys):
                        key_resp_PM.lenient = 0
                else:
                        key_resp_PM.lenient = []


        # check responses
        # check responses

        # store data for trials_2 (TrialHandler)
        PM_task_loop.addData('key_resp_PM.keys',key_resp_PM.keys)
        PM_task_loop.addData('key_resp_PM.corr', key_resp_PM.corr)
        PM_task_loop.addData('key_resp_PM.rt', key_resp_PM.rt)
        #PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
        PM_task_loop.addData('key_resp_PM.lenient', key_resp_PM.lenient)


        #meanRt = trials_2.data['key_resp_6.rt'].mean()
        #msg = "You got %d trials correct" %nCorr
  Routine end_block1
    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank you!

        This is the end of this block.
  Routine cues
    ImageComponent image_4
      image [set every repeat] = $cues
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine instructions2
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Please fill the first questionnaire (PANAS).

        When finished:
        Plese press {SPACE} to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Practice_thanks
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Thank you for completing the practice task!

        Press the SPACE BAR to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PMintro
    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now engage in the task.

        Please place your left finger on the {D} button and the right finger on the {L} button.


        Press {SPACE} to continue.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine questionnaire2
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Please fill in questionnaire 4 (IRI).

        Attention: the questionnaire has 2 pages!

        When finished:

        Please press {SPACE} to continue.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent text
      color = White
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        A series of words will be presented on the screen.
        Your task is to press the {D} button for YES
        when the word you are currently seeing is the same picture as the same picture that you have seen two trials earlier.
        If this is not the case, press the {L} button for NO.

        Press {SPACE} to see an illustration of the task.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_screen
    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine recog_task_instr
    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now engage in a recognition task.
        A series of images will be displayed, among them the six special images that you have studied earlier.

        Press the {D} button for YES if the image you are seeing is one of the images you have studied earlier.

        Press the {L} button for NO if the image you are seeing is NOT on of the images you have studied earlier.


        Press {SPACE} to continue.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cues_instructions
    TextComponent cues_instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Six special images will now be displayed TWICE.

        Please remember these images as good as possible.

        Press SPACE to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    ImageComponent image_3
      image [set every repeat] = $images
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_6
      allowedKeys = 'd','l'
      correctAns = $corrAnsw
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = all keys
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  Routine instruction_practice
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now engage in a short practice session of the image matching task, feedback will be provided after each trial.

        Keep in mind: Your task is to press the {D} button for YES when the image you are seeing is the same image that you have seen two trials earlier.
        If this is not the case, press the {L} button for NO.

        Please place your left index finger on the {D} button and your right index figer on the {L} button.

        Press {SPACE} to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine illustration
    ImageComponent image
      image [set every repeat] = $images
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 'space','l','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_check
    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Which key were you supposed to press when one of the
        special words or special images appeared?

        Please press this key now!
    KeyboardComponent key_resp_23
      allowedKeys = 'y','n','l','d','space','h'
      correctAns = 'h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine cue_instructions2
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The six special images will be displayed ONE LAST TIME.

        Please remember them as accurately as possible.

        Press {SPACE} to continue.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cues2
    TextComponent text_26
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word
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    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine instructions
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        A series of images will be now presented on the screen.

        Your task is to press the {D} button for YES
        when the image you are currently seeing is the same as the image that you have seen two trials earlier.

        If this is not the case, press the {L} button for NO.

        Press {SPACE} to see an illustration of the task.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine recog_task
    ImageComponent image_6
      image [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'l','d'
      correctAns = $corrAnsw
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine Instructions1
    TextComponent instructions1
      color = White
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome,

        Thank you for participating in this experiment.

        You will find all instructions on the screen.
        If you have any questions please ask the experimenter.

        Press {SPACE} to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine PM_instruction
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In addition, we would like you to press the {H} button, instead of the {D} or or {L} button, every time you see one of the special images you were asked to remember before.

        If you missed the {H} button when one of the previously learned special images appeared, you can always press it afterwards.


        Please press {SPACE} to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endOfExpMessage
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thank you!
        This is the end of the computer task.


        Please press {SPACE} and wait for further instructions.
    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_new
    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Block 2:

        The following task is the same one as before BUT with new special words.


        Press {SPACE} to continue.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine questionnaires
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Please approach the experimenter now.
        press {SPACE} to continue.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PM_task_2
    TextComponent text_29
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
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    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp_PM2
      allowedKeys = 'l','d','h'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = all keys
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        key_resp_PM2.lenient = []
        key_resp_PM2.RTfirst = []
      End Routine:
        if key_resp_PM2.keys in ['', [], None]:  # No response was made
             if str(CORRanswer)=='h':
                key_resp_PM2.lenient = 0
                key_resp_PM2.keys=None
                PM_task_loop2.addData('key_resp_PM2.lenient', key_resp_PM2.lenient)
                PM_task_loop2.addData('key_resp_PM2.keys',key_resp_PM2.keys)
             if str(CORRanswer)!='h':
                key_resp_PM2.keys=None
                key_resp_PM2.corr = 0
                PM_task_loop2.addData('key_resp_PM2.keys',key_resp_PM2.keys)
                PM_task_loop2.addData('key_resp_PM2.corr', key_resp_PM2.corr)

        if key_resp_PM2.keys != None:  # we had a response
                PM_task_loop2.addData('key_resp_PM2.rtFirst', key_resp_PM2.rt[0])
                if (str(key_resp_PM2.keys)[2] == str(CORRanswer)) or (str(key_resp_PM2.keys)[2] == CORRanswer):
                        key_resp_PM2.corr = 1

                else:
                        key_resp_PM2.corr = 0
               # PM_task_loop.addData('key_resp_PM.corr', key_resp_PM.corr)
               # PM_task_loop.addData('key_resp_PM.rt', key_resp_PM.rt)
               # PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
                #PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
        #

                if str(CORRanswer)=='h' and ('h' in key_resp_PM2.keys):
                        key_resp_PM2.lenient = 1
                elif str(CORRanswer)=='h' and ('h' not in key_resp_PM2.keys):
                        key_resp_PM2.lenient = 0
                else:
                        key_resp_PM2.lenient = []


        # check responses
        # check responses

        # store data for trials_2 (TrialHandler)
        PM_task_loop2.addData('key_resp_PM2.keys',key_resp_PM2.keys)
        PM_task_loop2.addData('key_resp_PM2.corr', key_resp_PM2.corr)
        PM_task_loop2.addData('key_resp_PM2.rt', key_resp_PM.rt)
        #PM_task_loop.addData('key_resp_PM.rtFirst', key_resp_PM.rt[0])
        PM_task_loop2.addData('key_resp_PM2.lenient', key_resp_PM2.lenient)


        #meanRt = trials_2.data['key_resp_6.rt'].mean()
        #msg = "You got %d trials correct" %nCorr
  Routine skip_practice
  Routine askforPractice
    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        PracticeYes=1
        PanasYes=1
        finalRatings=0
        endFirstHalf =1
        instructionwordfirst = 1
        instructionimagefirst =0
      Begin Routine:
        #if expInfo['Group'] == 'C' or expInfo['Group'] == 'D' or expInfo['Group'] == 'c' or expInfo['Group'] == 'd':
        if expInfo['session'] == '2':
            PracticeYes = 0
            PanasYes=0
            finalRatings=1
            endFirstHalf=0
            instructionwordfirst =0
            instructionimagefirst =1
  Routine instructionPanas
    TextComponent text_34
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are now going to see a number of words that describe different feelings and emotions.
        Read each item and then mark the appropriate answer in the scale underneath to that word, from 1 to 5.
        Indicate to what extent you feel these feelings/emotions right now, at the present moment.

        Please press {Space} to continue.
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructionPanas_2
    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ou are now going to see a number of words that describe different feelings and emotions. Read each item and then mark the appropriate answer in the space next to that word. Indicate to what extent you feel these feelings/emotions right now, at the present moment.

        Please press the "space bar" to continue.
    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructionPanas2
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You can make your choice with the mouse.
        After that, click on the number that appears.

        Click {Space} to continue
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine PanasTest
    TextComponent text_37
      letterHeight = 0.2
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $adjective
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 1=not at all 2 = A little 3 = Moderately 4 = Quite a bit 5 = extremely
      wrapWidth = 2
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    TextComponent text_39
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Click on the number to continue
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  Routine Valence
    TextComponent text_47
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    ImageComponent image_1
      image [set every repeat] = $images
      pos = (0, 0.4)
      size = (1,1)
      startVal [time (s)] = 0.0
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    ImageComponent ValenceImg
      image = sam image.png
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider_valence
      forceEndRoutine = False
      granularity = 1
      pos = (0, -0.6)
      size = (0.81, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 25, 50, 75, 100)
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    TextComponent text_40
      letterHeight = 0.1
      pos = (0.015, -0.3)
      startVal [time (s)] = 0.0
      text = Positive                                                    Negative
      wrapWidth = 2
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_41
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press {Space} to continue
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  Routine Valence_3
  Routine Arousal
    TextComponent text_48
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    ImageComponent image_2
      image [set every repeat] = $images
      pos = (0, 0.4)
      size = (1,1)
      startVal [time (s)] = 0.0
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    ImageComponent Arousalimage
      image = sam arousal.png
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider_arousal
      forceEndRoutine = False
      granularity = 1
      pos = (0, -0.6)
      size = (0.81, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 25, 50, 75, 100)
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    TextComponent text_42
      letterHeight = 0.1
      pos = (-0.025, -0.3)
      startVal [time (s)] = 0.0
      text = Excited                                                    Calm
      wrapWidth = 2.5
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    KeyboardComponent key_resp_29
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_43
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press {Space} to continue
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  Routine InstructionCueRatings
    TextComponent text_44
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are now going to see the images and the words that you had to remember once again.

        Please rate the valence (positive vs negative) and the arousal (excited vs calm) of each word and image.

        Press {Space} to start.
    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine task_instruction_new
    TextComponent text_45
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will later be asked to work on the same matching task as you did before.

        However, this time you will see images instead of words.

        Therefore, you will have to press the {D} button for YES when the image you are seeing is the same image that you have seen two trials earlier.
        If this is not the case, press the {L} button.


        Please press {SPACE} to continue.
    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine countdown
    TextComponent text_46
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every frame] = $str(round(routineTimer.getTime(),1)) 
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  Routine loopcounter
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        #we can set instructionwordfirst =1 so participants will see the message
        #saying they have to continue to do what they did before.
        instructionwordfirst = 1
        instructionimagefirst = 0
Flow
  Routine askforPractice
  LoopInitiator Panas_routine loopType="TrialHandler"
    loopType = sequential
    nReps = $PanasYes
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    Routine Instructions1
    Routine instructionPanas
    Routine instructionPanas2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Panas 2\panas.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('adjective', 'interested'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'distressed'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'excited'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'upset'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'strong'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'guilty'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'scared'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'hostile'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'enthusiastic'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'proud'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'irritable'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'alert'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'ashamed'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'inspired'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'nervous'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'determined'), ('posneg', 'pos'), ('panasnum', 1)]),
        OrderedDict([('adjective', 'attentive'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'jittery'), ('posneg', 'neg'), ('panasnum', 2)]),
        OrderedDict([('adjective', 'active'), ('posneg', 'pos'), ('panasnum', 1)])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
      Routine PanasTest
    LoopTerminator trials
  LoopTerminator Panas_routine
  LoopInitiator skip_routine loopType="TrialHandler"
    loopType = sequential
    nReps = $PracticeYes
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    Routine instructions
    LoopInitiator illustration_loop loopType="TrialHandler"
      conditionsFile = illustrations2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('images', 'Explanation1.jpg'), ('key', 'space')]),
        OrderedDict([('images', 'Explanation2.jpg'), ('key', 'l')]),
        OrderedDict([('images', 'Explanation3.jpg'), ('key', 'l')]),
        OrderedDict([('images', 'Explanation4.jpg'), ('key', 'l')]),
        OrderedDict([('images', 'Explanation5.jpg'), ('key', 'd')]),
        OrderedDict([('images', 'Explanation6.jpg'), ('key', 'l')]),
        OrderedDict([('images', 'Explanation7.jpg'), ('key', 'space')])]
      Routine illustration
    LoopTerminator illustration_loop
    Routine instruction_practice
    Routine blank_screen
    LoopInitiator repeat_practice loopType="TrialHandler"
      loopType = sequential
      nReps = 999
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      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = practice images.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('images', 'Pictures/1710.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/2635.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/1710.jpg'), ('corrAnsw', 'd')]),
          OrderedDict([('images', 'Pictures/5890.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/1675.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/2635.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/1675.jpg'), ('corrAnsw', 'd')]),
          OrderedDict([('images', 'Pictures/7009.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/7021.jpg'), ('corrAnsw', 'l')]),
          OrderedDict([('images', 'Pictures/7009.jpg'), ('corrAnsw', 'd')]),
          OrderedDict([('images', 'Pictures/5890.jpg'), ('corrAnsw', 'l')])]
        Routine practice
        Routine feedback
      LoopTerminator trials_2
      Routine practice_score
    LoopTerminator repeat_practice
    Routine Practice_thanks
  LoopTerminator skip_routine
  LoopInitiator Group loopType="TrialHandler"
    conditionsFile = $"Group"+expInfo['Group']+".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine cues_instructions
    Routine blank_screen
    LoopInitiator loop_cues loopType="TrialHandler"
      conditionsFile = $cueFileIm
      loopType = random
      nReps = 1
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      Routine cues
    LoopTerminator loop_cues
    Routine cue_instructions2
    Routine blank_screen
    LoopInitiator loop_cues2 loopType="TrialHandler"
      conditionsFile = $cueFileIm
      loopType = random
      nReps = 1
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      Routine cues
    LoopTerminator loop_cues2
    Routine thank_you
    LoopInitiator instruction_wordfirst loopType="TrialHandler"
      loopType = sequential
      nReps = $instructionwordfirst
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      Routine task_instructions
    LoopTerminator instruction_wordfirst
    LoopInitiator instruction_image_first loopType="TrialHandler"
      loopType = sequential
      nReps = $instructionimagefirst
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      Routine task_instruction_new
    LoopTerminator instruction_image_first
    Routine PM_instruction
    Routine questionnaires
    Routine countdown
    Routine PMintro
    Routine blank_screen
    LoopInitiator PM_task_loop loopType="TrialHandler"
      conditionsFile = $condFileIm
      loopType = sequential
      nReps = 1
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      Routine PM_task
    LoopTerminator PM_task_loop
    Routine end_block1
    Routine recog_task_instr
    Routine blank_screen
    LoopInitiator recog_task_loop loopType="TrialHandler"
      conditionsFile = $recogFileIm
      loopType = random
      nReps = 1
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      Routine recog_task
    LoopTerminator recog_task_loop
    Routine loopcounter
  LoopTerminator Group
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = $endFirstHalf
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    Routine end_first_half
  LoopTerminator trials_3
  LoopInitiator finalLoop loopType="TrialHandler"
    loopType = sequential
    nReps = $finalRatings
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    Routine InstructionCueRatings
    LoopInitiator SAMratings loopType="TrialHandler"
      conditionsFile = CueRatings.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('words', 'bunny'), ('images', None), ('trialType', 2), ('ValArous', 'PosL1')]),
        OrderedDict([('words', 'afraid'), ('images', None), ('trialType', 7), ('ValArous', 'NegH1')]),
        OrderedDict([('words', 'startled'), ('images', None), ('trialType', 6), ('ValArous', 'NeuH1')]),
        OrderedDict([('words', 'statue'), ('images', None), ('trialType', 3), ('ValArous', 'NeuL1')]),
        OrderedDict([('words', 'birthday'), ('images', None), ('trialType', 5), ('ValArous', 'PosH1')]),
        OrderedDict([('words', 'coward'), ('images', None), ('trialType', 4), ('ValArous', 'NegL1')]),
        OrderedDict([('words', 'cozy'), ('images', None), ('trialType', 2), ('ValArous', 'PosL2')]),
        OrderedDict([('words', 'table'), ('images', None), ('trialType', 3), ('ValArous', 'NeuL2')]),
        OrderedDict([('words', 'divorce'), ('images', None), ('trialType', 7), ('ValArous', 'NeuH2')]),
        OrderedDict([('words', 'python'), ('images', None), ('trialType', 6), ('ValArous', 'NeuH2')]),
        OrderedDict([('words', 'dollar'), ('images', None), ('trialType', 5), ('ValArous', 'PosH2')]),
        OrderedDict([('words', 'impair'), ('images', None), ('trialType', 4), ('ValArous', 'NegL2')]),
        OrderedDict([('words', None), ('images', 'Pictures/7042.jpg'), ('trialType', 3), ('ValArous', 'NeuL1')]),
        OrderedDict([('words', None), ('images', 'Pictures/7405.jpg'), ('trialType', 7), ('ValArous', 'PosH1')]),
        OrderedDict([('words', None), ('images', 'Pictures/2151.jpg'), ('trialType', 4), ('ValArous', 'PosL1')])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
      Routine Valence
      Routine Arousal
    LoopTerminator SAMratings
    Routine instruction_check
    Routine endOfExpMessage
  LoopTerminator finalLoop
