PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Panas
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        You are now going to see a number of words that describe different feelings and emotions. Read each item and then mark the appropriate answer in the space next to that word. Indicate to what extent you feel these feelings/emotions right now, at the present moment.

        Please press the "space bar" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PanasTest
    TextComponent Text1
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $adjective
      wrapWidth = 2.5
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 1=not at all 2 = A little 3 = Moderately 4 = Quite a bit 5 = extremely
      wrapWidth = 1.05
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click on the number to continue
      wrapWidth = 2
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  Routine Instructions2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        You can make your choice with the mouse.
        After that, click on the number that appears.

        Click "space bar" to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = panas.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('adjective', 'interested'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'distressed'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'excited'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'upset'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'strong'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'guilty'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'scared'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'hostile'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'enthusiastic'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'proud'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'irritable'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'alert'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'ashamed'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'inspired'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'nervous'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'determined'), ('posneg', 'pos'), ('panasnum', 1)]),
      OrderedDict([('adjective', 'attentive'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'jittery'), ('posneg', 'neg'), ('panasnum', 2)]),
      OrderedDict([('adjective', 'active'), ('posneg', 'pos'), ('panasnum', 1)])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
    Routine PanasTest
  LoopTerminator trials
