PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = timer
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(round(routineTimer.getTime(),1)) 
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  Routine ring
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
  Routine ring
